PsychoPy2experiment version="2026.1.0"
Settings
  runMode = 1
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    PolygonComponent fixation
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      fillColor = white
      size = 0.05,0.05
      shape = cross
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    TextComponent text
      startVal [time (s)] = 0
      letterHeight = 0.05
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      text [set every repeat]:
        $"GBP " + str(reward_today) + " today or GBP " + str(future_reward) + " after " + str(delay) + " days"
    KeyboardComponent key_resp
      startVal [time (s)] = 1
      forceEndRoutine = True
      allowedKeys = 't','l'
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    conditionsFile = C:/Users/mahee/Downloads/PsychoPy/tutorial 0.1/tutorials/discounting.csv
    nReps = 15
    conditions = []
    endPoints = [0,1]
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    Routine trial
  LoopTerminator trials
